PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change-localization
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Routines
  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome.
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  Routine practice
  Routine trial
    MouseComponent mouse
      clickable = stim1
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    PolygonComponent stim1
      fillColor [set every repeat] = $color1
      lineColor [set every repeat] = $color1
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions
  Routine trial
